PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = grating
  keyboardBackend = ioHub
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Routines
  Routine trial
    GratingComponent grating
      color = $[0,1,0]
      contrast = -1.0
      phase [set every frame] = 2*t
      sf = 15
      size = (2, 1)
      startVal [time (s)] = 30
      stopVal [duration (s)] = 15
      tex = sin
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    GratingComponent grating_2
      color = $[0,1,0]
      contrast = -1.0
      phase [set every frame] = -2*t
      sf = 15
      size = (2, 1)
      startVal [time (s)] = 15
      stopVal [duration (s)] = 15
      tex = sin
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    NoiseStimComponent noise
      filter = None
      imageComponent = Phase
      interpolate = nearest
      noiseBW = 1
      noiseBWO = 30
      noiseBaseSf = 8.0
      noiseClip = 3.0
      noiseElementSize = 0.0625
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = N-frames
      noiseNewSampleWhen = 1
      noiseOri = 0.0
      noiseType = White
      sf = None
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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Flow
  Routine trial
  Routine trial
