PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = loom
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent looming
      contrast = -1
      fillColor = black
      lineColor = 0.0000, 0.0000, 0.0000
      lineWidth = 0
      pos = (-0.5, 0)
      shape = circle
      size [set every frame] = (0.1*t, 0.1*t)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine pretrial
    NoiseStimComponent noise
      filter = None
      imageComponent = Phase
      interpolate = nearest
      noiseBW = 1
      noiseBWO = 30
      noiseBaseSf = 8.0
      noiseClip = 3.0
      noiseElementSize = 0.0625
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = N-frames
      noiseNewSampleWhen = 1
      noiseOri = 0.0
      noiseType = Isotropic
      sf = None
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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Flow
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine pretrial
    Routine trial
  LoopTerminator trials_2
